WorkflowBuilder(Version=2.8.0-alpha015)
PropertySource<Bonsai.IO.GetDirectories,System.String>(MemberName=Path, Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory)
-> Add(Operand=StringProperty(Value=\RawData))
-> PropertyMapping(Path)
-> Bonsai.IO.GetDirectories(Path=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData, SearchPattern=*, SearchOption=TopDirectoryOnly)
-> Merge
-> SelectMany BonflyPaths
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject ThisPath

    SubscribeSubject ThisPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH2, SearchPattern=*.avi, SearchOption=TopDirectoryOnly)
    -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> AsyncSubject VideoPath

    SubscribeSubject ThisPath
    -> PropertyMapping(Path)
    -> Bonsai.IO.GetFiles(Path=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH2, SearchPattern=*.csv, SearchOption=TopDirectoryOnly)
    -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> AsyncSubject CsvPath

    SubscribeSubject ThisPath
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Replace("RawData", "PostProcessing")
    -> Take(Count=1)
    -> AsyncSubject PostProcessingPath

    SubscribeSubject ThisPath => #19
    SubscribeSubject PostProcessingPath => #20
    SubscribeSubject PostProcessingPath
    -> Add(Operand=StringProperty(Value=\Videos)) => #22
    SubscribeSubject PostProcessingPath
    -> Add(Operand=StringProperty(Value=\Tracking)) => #24
    SubscribeSubject VideoPath => #25
    SubscribeSubject CsvPath => #26
    SubscribeSubject VideoPath
    -> Bonsai.IO.GetFileNameWithoutExtension => #28
    #19, #20, #22, #24, #25, #26, #28 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        Item1 as RawDataPath,
        Item2 as PostProcessingPath,
        Item3 as PostProcessingVideos,
        Item4 as PostProcessingTracking,
        Item5 as VideoPath,
        Item6 as StimCsvPath,
        Item7 as FileName)
    -> WorkflowOutput
-> InputMapping
-> CreateObservable OfflineAnalysis
    WorkflowInput Source1
    -> Take(Count=1)
    -> AsyncSubject ThisSessionPaths

    SubscribeSubject ThisSessionPaths
    -> MemberSelector(Selector=VideoPath)
    -> PropertyMapping(InputVideoPath) => #5
    SubscribeSubject ThisSessionPaths
    -> MemberSelector(Selector=StimCsvPath)
    -> PropertyMapping(InputStimCsvPath) => #8
    ExternalizedMapping(ModelFileName, TrainingConfig, EnableSleap) => #9
    #5, #8, #9 -> GroupWorkflow Settings
        ExternalizedMapping(Value(DisplayName=ScalingFactor))
        -> FloatProperty(Value=1)
        -> Take(Count=1)
        -> AsyncSubject ScalingFactor

        ExternalizedMapping(Value(DisplayName=CenteredCropSize))
        -> PropertySource<Bonsai.Vision.Resize,OpenCV.Net.Size>(MemberName=Size, Value(Width=128, Height=128))
        -> Take(Count=1)
        -> AsyncSubject FlyCenteredCropSize

        ExternalizedMapping(Value(DisplayName=InputVideoPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.avi
        -> Take(Count=1)
        -> AsyncSubject InputVideoPath

        ExternalizedMapping(Value(DisplayName=InputStimCsvPath))
        -> PropertySource<Bonsai.Vision.FileCapture,System.String>
          MemberName=FileName
          Value: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.csv
        -> Take(Count=1)
        -> AsyncSubject InputStimCsvPath

        ExternalizedMapping(Value(DisplayName=ModelFileName))
        -> PropertySource<Bonsai.Sleap.PredictSinglePose,System.String> => #17
          MemberName=ModelFileName
          Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\modelfile.pb
        ExternalizedMapping(Value(DisplayName=TrainingConfig))
        -> PropertySource<Bonsai.Sleap.PredictSinglePose,System.String> => #19
          MemberName=TrainingConfig
          Value=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\training_config.json
        PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(OpenCV.Net.ColorConversion)>(MemberName=ColorConversion, Value=nil) => #20
        PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(System.Single)>(MemberName=ScaleFactor, Value=nil) => #21
        PropertySource<Bonsai.Sleap.PredictSinglePose,System.Nullable(System.Single)>(MemberName=PartMinConfidence, Value=nil) => #22
        ExternalizedMapping(Value(DisplayName=EnableSleap))
        -> BooleanProperty(Value=true) => #24
        #17, #19, #20, #21, #22, #24 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as ModelFileName,
            Item2 as TrainingConfig,
            Item3 as ColorConversion,
            Item4 as ScaleFactor,
            Item5 as PartMinConfience,
            Item6 as EnableSleap)
        -> Take(Count=1)
        -> AsyncSubject SleapModelConfiguration

    GroupWorkflow DataLoader
        SubscribeSubject InputStimCsvPath
        -> PropertyMapping(FileName) => #1
        SubscribeSubject InputVideoPath
        -> PropertyMapping(FileName)
        -> Bonsai.Vision.FileCapture => #4
          FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.avi
          PlaybackRate=99999999
          StartPosition=0
          PositionUnits=Frames
          Loop=false
          Playing=true
        #1, #4 -> Bonsai.IO.CsvReader
          FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.csv
          ScanPattern="%i %i %i %L %L "
          SkipRows=0
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename => #6
          Expression:
            new(
            Item1 as Visual,
            Item2 as Stim0,
            Item3 as Stim1,
            Item4 as FrameCounter,
            Item5 as FrameTimestamp
            )
        #4 -> Bonsai.Vision.Grayscale => #7
        #6, #7 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
          Expression:
            new(
            Item1 as Stimuli,
            Item2 as Video
            )
        -> PublishSubject Video&Stimuli => #10
        SubscribeSubject ArenaFeeds
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

        Defer Background
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #1
            ExternalizedMapping(NumberBackgroundFrames, PixelSearch, NoiseThreshold) => #2
            #1, #2 -> Defer CalculateBackground
                ExternalizedMapping(Value(DisplayName=NumberBackgroundFrames))
                -> IntProperty(Value=10)
                -> Take(Count=1)
                -> AsyncSubject NumberBackgroundFrames

                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject FileName
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.FileCapture
                  FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.avi
                  PlaybackRate=99999999
                  StartPosition=0
                  PositionUnits=Frames
                  Loop=false
                  Playing=true
                -> Bonsai.Vision.Grayscale => #11
                ExternalizedMapping(PixelSearch, NoiseThreshold) => #12
                #11, #12 -> BonZeb.CalculateBackground(PixelSearch=Brightest, NoiseThreshold=0) => #13
                SubscribeSubject NumberBackgroundFrames
                -> PropertyMapping(Count) => #15
                #13, #15 -> Take(Count=10)
                -> Last
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject BackgroundImage
        -> SelectMany FindArenas
            WorkflowInput Source1
            -> Bonsai.Vision.EqualizeHistogram => #1
            ExternalizedMapping(ThresholdValue, ThresholdType) => #2
            #1, #2 -> Bonsai.Vision.Threshold(ThresholdValue=96, MaxValue=255, ThresholdType=Binary)
            -> Bonsai.Vision.FindContours(Mode=ConnectedComponent, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=20000, MaxArea=200000)
            -> Bonsai.Vision.BinaryRegionAnalysis
            -> OrderBy(KeySelector="Centroid.X,Centroid.Y")
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject ArenaROIs
        -> SelectMany CropBackgrounds
            SubscribeSubject ArenaROIs
            -> Take(Count=1)
            -> Merge
            -> CreateObservable CropBackgroundArenas
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ArenaDetection

                SubscribeSubject BackgroundImage => #3
                SubscribeSubject ArenaDetection
                -> MemberSelector(Selector=Contour.Rect)
                -> PropertyMapping(RegionOfInterest) => #6
                #3, #6 -> Bonsai.Vision.Crop(RegionOfInterest(X=690, Y=522, Width=414, Height=413))
                -> WorkflowOutput
            -> Zip
            -> Take(Count=1)
            -> WorkflowOutput
        -> AsyncSubject CroppedBackground
        -> SelectMany CreateArenaFeeds
            SubscribeSubject ArenaROIs
            -> Take(Count=1) => #1
            SubscribeSubject InputVideoPath
            -> PropertyMapping(FileName) => #3
            #1, #3 -> SelectMany TrackArenas
                ExternalizedMapping(Value(DisplayName=FileName))
                -> StringProperty
                  Value: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\RawData\FH1\MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30.avi
                -> Take(Count=1)
                -> AsyncSubject FileName

                SubscribeSubject CroppedBackground
                -> Merge => #5
                WorkflowInput Source1
                -> Merge => #7
                #5, #7 -> Zip
                -> CreateObservable CropCenter
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject This

                    SubscribeSubject This
                    -> MemberSelector(Selector=Item1)
                    -> Take(Count=1)
                    -> AsyncSubject ThisCropBackground

                    SubscribeSubject Video&Stimuli
                    -> MemberSelector(Selector=Video) => #8
                    SubscribeSubject This
                    -> MemberSelector(Selector=Item2.Contour.Rect) => #10
                    #8, #10 -> WithLatestFrom
                    -> InputMapping(Selector=Item1, RegionOfInterest(Selector=Item2))
                    -> Bonsai.Vision.Crop(RegionOfInterest(X=201, Y=527, Width=407, Height=410)) => #13
                    SubscribeSubject ThisCropBackground => #14
                    #13, #14 -> CombineLatest
                    -> Bonsai.Dsp.AbsoluteDifference => #16
                    SubscribeSubject ThisCropBackground => #17
                    #13, #17 -> CombineLatest
                    -> MemberSelector(Selector=Item2) => #19
                    SubscribeSubject This => #20
                    #13, #20 -> CombineLatest
                    -> MemberSelector(Selector=Item2) => #22
                    #13, #16, #19, #22 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1 as RawFrame,
                        Item2 as BackgroundSubtractedFrame,
                        Item3 as RawBackground,
                        Item4 as ArenaCentroid)
                    -> WorkflowOutput
                -> WorkflowOutput
            -> ToList
            -> WorkflowOutput
        -> AsyncSubject ArenaFeeds

    Annotation(Text="")
    -> GroupWorkflow AnalysisPipeline
        SubscribeSubject ArenaFeeds
        -> Take(Count=1)
        -> Merge
        -> ElementIndex
        -> CreateObservable ProcessSingleArenaFrames
            WorkflowInput Source1
            -> ReplaySubject Data(BufferSize=nil)

            SubscribeSubject Data
            -> MemberSelector(Selector=Index)
            -> Take(Count=1)
            -> AsyncSubject ArenaIndex

            SubscribeSubject Data
            -> MemberSelector(Selector=Value)
            -> Merge
            -> PublishSubject ArenaVideoStream

            GroupWorkflow CentroidTracking
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedFrame) => #1
                -> Bonsai.Vision.Threshold(ThresholdValue=100, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #6
                #1 -> Bonsai.Vision.Threshold(ThresholdValue=21, MaxValue=255, ThresholdType=Binary)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.BinaryRegionAnalysis
                -> Bonsai.Vision.LargestBinaryRegion
                -> MemberSelector(Selector=Centroid) => #11
                #6, #11 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(
                    Item1 as SoftCentroid,
                    Item2 as HardCentroid)
                -> Bonsai.Scripting.Expressions.ExpressionTransform PickBestCentroid
                  Expression: it.SoftCentroid.X > 0 ? it.SoftCentroid : it.HardCentroid
                -> PublishSubject BestCentroid => #15
                SubscribeSubject BestCentroid => #16
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=ArenaCentroid.Item2.Contour.Rect) => #18
                #16, #18 -> WithLatestFrom
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression:
                    new(
                    Item1.X / Item2.Width as X,
                    Item1.Y / Item2.Height as Y
                    )
                -> InputMapping(Selector="X,Y", X(Selector=X), Y(Selector=Y))
                -> Bonsai.Vision.CreatePoint2f(X=0.220218837, Y=0.146762833)
                -> PublishSubject NormalizedBestCentroid => #23
                #15, #23 -> Zip
                -> WorkflowOutput

            SubscribeSubject BestCentroid
            -> PublishSubject ZoomCoordinate

            GroupWorkflow SleapTracking => #13
                SubscribeSubject CenteredVideo => #0
                SubscribeSubject SleapModelConfiguration
                -> PropertyMapping => #2
                  ModelFileName(Selector=ModelFileName)
                  TrainingConfig(Selector=TrainingConfig)
                  PartMinConfidence(Selector=PartMinConfience)
                  ScaleFactor(Selector=ScaleFactor)
                  ColorConversion(Selector=ColorConversion)
                #0, #2 -> Bonsai.Sleap.PredictSinglePose
                  ModelFileName=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\modelfile.pb
                  TrainingConfig=C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\FlyHigherTracker\FlyHigherTracker\Workflows\Extensions\training_config.json
                  PartMinConfidence=nil
                  ScaleFactor=nil
                  ColorConversion=nil
                -> PublishSubject PoseStream

                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=ArenaCentroid.Item2.Contour.Rect) => #6
                SubscribeSubject PoseStream => #7
                #6, #7 -> Zip => #8
                SubscribeSubject ScalingFactor => #9
                #8, #9 -> WithLatestFrom
                -> InputMapping(Selector=Item1.Item2, CropSize(Selector="Item1.Item1.Width,Item1.Item1.Height"), ScalingFactor(Selector=Item2))
                -> NormalizeSleapOutput(CropSize(Width=412, Height=407), ScalingFactor=1)
                -> PublishSubject NormalizedPoseStream

                SubscribeSubject PoseStream => #14
                -> InferVisualizerViews => #15
                  BodyPart_Left=L
                  BodyPart_Right=R
                  BodyPart_Top=T
                  BodyPart_Bottom=B
                  BodyPart_Head=H
                  BodyPart_Thorax=Trx
                  BodyPart_Abdomen=Abd
                  BodyPart_LeftWing=Lw
                  BodyPart_RightWing=Rw
                SubscribeSubject NormalizedPoseStream
                -> MemberSelector(Selector=Normalized) => #17
                #15, #14, #17 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Rename
                  Expression:
                    new(Item1 as VisualizerViews,
                    Item2 as Pose,
                    Item3 as NormalizedPose)
                -> WorkflowOutput
            SubscribeSubject SleapModelConfiguration
            -> MemberSelector(Selector=EnableSleap)
            -> Condition => #16
                WorkflowInput Source1
                -> WorkflowOutput
            #13, #16 -> SubscribeWhen

            SubscribeSubject ArenaIndex => #18
            GroupWorkflow CenteredVideo => #19
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=RawFrame) => #1
                SubscribeSubject ZoomCoordinate => #2
                #1, #2 -> Zip => #3
                SubscribeSubject FlyCenteredCropSize
                -> PropertyMapping(Size) => #5
                #3, #5 -> Bonsai.Vision.CropCenter(Size(Width=128, Height=128), FillValue(Val0=0, Val1=0, Val2=0, Val3=0))
                -> PublishSubject CenteredVideo
                -> WorkflowOutput
            #18, #19 -> CombineLatest
            -> WorkflowOutput

            GroupWorkflow PixelChange
                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedFrame)
                -> Bonsai.Vision.BackgroundSubtraction(BackgroundFrames=1, AdaptationRate=1, ThresholdValue=5, ThresholdType=Binary, SubtractionMethod=Dark)
                -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=3, MaxArea=nil)
                -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1)
                -> Bonsai.Dsp.CountNonZero
                -> PublishSubject PixelChange
                -> WorkflowOutput

            GroupWorkflow Logging
                GroupWorkflow SaveMaskedBackground => #0
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=ArenaCentroid) => #1
                    -> MemberSelector(Selector=Item1)
                    -> MemberSelector(Selector=Size) => #3
                    #1 -> MemberSelector(Selector=Item2)
                    -> MemberSelector(Selector=Contour) => #5
                    -> Bonsai.Vision.DrawContours(MaxLevel=1, Thickness=-1) => #6
                    #5 -> MemberSelector(Selector=Rect) => #7
                    #3, #6, #7 -> Zip
                    -> Bonsai.Scripting.Expressions.ExpressionTransform
                      Expression:
                        new(
                        Item1 as OrginalImageSize,
                        Item2 as ContourMask,
                        Item3 as Rect)
                    -> InputMapping(Selector=ContourMask, Size(Selector=OrginalImageSize), Offset(Selector="Rect.X,Rect.Y"))
                    -> Bonsai.Vision.ResizeCanvas(Size(Width=414, Height=413), BorderType=Constant, FillValue(Val0=0, Val1=0, Val2=0, Val3=0), Offset(X=690, Y=522))
                    -> Take(Count=1) => #12
                    SubscribeSubject ArenaVideoStream
                    -> MemberSelector(Selector=RawBackground)
                    -> Take(Count=1) => #15
                    #12, #15 -> Zip
                    -> BitwiseAnd
                    -> WorkflowOutput
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=PostProcessingVideos) => #2
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=FileName) => #4
                SubscribeSubject ArenaIndex => #5
                #2, #4, #5 -> Zip
                -> Format(Format={0}/{1}_fly{2}.png, Selector="Item1,Item2,Item3") => #7
                #0, #7 -> WithLatestFrom
                -> InputMapping(Selector=Item1, FileName(Selector=Item2))
                -> Bonsai.Vision.SaveImage
                  FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\PostProcessing\FH1\Videos/MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30_fly3.png
                  Suffix=None

                SubscribeSubject ArenaVideoStream
                -> MemberSelector(Selector=BackgroundSubtractedFrame) => #12
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=PostProcessingVideos) => #14
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=FileName) => #16
                SubscribeSubject ArenaIndex => #17
                #14, #16, #17 -> Zip
                -> Format(Format={0}/{1}_fly{2}.avi, Selector="Item1,Item2,Item3") => #19
                #12, #19 -> WithLatestFrom
                -> InputMapping(Selector=Item1, FileName(Selector=Item2))
                -> Bonsai.Vision.VideoWriter
                  FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\PostProcessing\FH1\Videos/MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30_fly3.avi
                  Suffix=None
                  Buffered=true
                  Overwrite=false
                  FourCC=FMP4
                  FrameRate=30
                  FrameSize(Width=0, Height=0)
                  ResizeInterpolation=NearestNeighbor

                SubscribeSubject BestCentroid => #23
                SubscribeSubject NormalizedBestCentroid => #24
                #23, #24 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #26
                  Expression: new(Item1 as Centroid, Item2 as NormalizedCentroid)
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=PostProcessingTracking) => #28
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=FileName) => #30
                SubscribeSubject ArenaIndex => #31
                #28, #30, #31 -> Zip
                -> Format(Format={0}/{1}_fly{2}_centroid.csv, Selector="Item1,Item2,Item3")
                -> PropertyMapping(FileName) => #34
                #26, #34 -> Bonsai.IO.CsvWriter
                  FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\PostProcessing\FH1\Tracking/MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30_fly3_centroid.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

                SubscribeSubject PixelChange
                -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #37
                  Expression: new(it as PixelChange)
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=PostProcessingTracking) => #39
                SubscribeSubject ThisSessionPaths
                -> MemberSelector(Selector=FileName) => #41
                SubscribeSubject ArenaIndex => #42
                #39, #41, #42 -> Zip
                -> Format(Format={0}/{1}_fly{2}_pixelChange.csv, Selector="Item1,Item2,Item3")
                -> PropertyMapping(FileName) => #45
                #37, #45 -> Bonsai.IO.CsvWriter
                  FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\PostProcessing\FH1\Tracking/MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30_fly3_pixelChange.csv
                  Append=false
                  Overwrite=false
                  Suffix=None
                  IncludeHeader=true

                GroupWorkflow SleapLogger => #47
                    SubscribeSubject NormalizedPoseStream
                    -> MemberSelector(Selector=Normalized)
                    -> Merge
                    -> GroupBy(KeySelector=Name)
                    -> SelectMany LogSleapDemux
                        WorkflowInput Source1
                        -> ReplaySubject Data(BufferSize=nil)

                        SubscribeSubject Data
                        -> MemberSelector(Selector=Key)
                        -> AsyncSubject BodyPart

                        SubscribeSubject Data
                        -> Merge
                        -> MemberSelector(Selector="Position,Confidence")
                        -> Bonsai.Scripting.Expressions.ExpressionTransform Header => #8
                          Expression:
                            new(
                            Item1 as Position,
                            Item2 as Confidence)
                        SubscribeSubject ThisSessionPaths
                        -> MemberSelector(Selector=PostProcessingTracking) => #10
                        SubscribeSubject ThisSessionPaths
                        -> MemberSelector(Selector=FileName) => #12
                        SubscribeSubject ArenaIndex => #13
                        SubscribeSubject BodyPart => #14
                        ExternalizedMapping(Value(DisplayName=PrefixName)) => #15
                        #15, #14 -> StringProperty(Value=NormalizedSleap) => #16
                        #10, #12, #13, #14, #16 -> Zip
                        -> Format(Format={0}/{1}_fly{2}_{4}_{3}.csv, Selector="Item1,Item2,Item3,Item4,Item5")
                        -> PropertyMapping(FileName) => #19
                        #8, #19 -> Bonsai.IO.CsvWriter
                          FileName: C:\Users\neurogears\Documents\git\MoitaLab\BonFly\Data\BonflyExperimentDirectory\PostProcessing\FH1\Tracking/MC-Fem_CS_Low_Freezer-20Loom-2days-FH1-2023-06-06T14_35_30_fly3_NormalizedSleap_B.csv
                          Append=false
                          Overwrite=false
                          Suffix=None
                          IncludeHeader=true
                    -> WorkflowOutput
                SubscribeSubject SleapModelConfiguration
                -> MemberSelector(Selector=EnableSleap)
                -> Condition => #50
                    WorkflowInput Source1
                    -> WorkflowOutput
                #47, #50 -> SubscribeWhen
        -> Merge
        -> WorkflowOutput

    GroupWorkflow Visualizers
        SubscribeSubject ArenaFeeds
        -> Index(Operand=IntProperty(Value=0))
        -> Merge
        -> MemberSelector(Selector=BackgroundSubtractedFrame)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #4
        SubscribeSubject ArenaFeeds
        -> Index(Operand=IntProperty(Value=1))
        -> Merge
        -> MemberSelector(Selector=BackgroundSubtractedFrame)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #9
        SubscribeSubject ArenaFeeds
        -> Index(Operand=IntProperty(Value=2))
        -> Merge
        -> MemberSelector(Selector=BackgroundSubtractedFrame)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #14
        SubscribeSubject ArenaFeeds
        -> Index(Operand=IntProperty(Value=3))
        -> Merge
        -> MemberSelector(Selector=BackgroundSubtractedFrame)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #19
        #4, #9, #14, #19 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput
    -> WorkflowOutput
-> Concat
