<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0-rc1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>Schemas\demo.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StimulusSettings</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="spk:SpinnakerCapture">
                <spk:Index xsi:nil="true" />
                <spk:ColorProcessing>Default</spk:ColorProcessing>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpDevice</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>LedBoardCommands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>Off</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>Off</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>LedBoardEvents</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="p2:LedArrayCommand">
              <p2:Type>SetAuxiliaryOutput</p2:Type>
              <p2:Mask>Index1</p2:Mask>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>LedBoardCommands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyView.bonsai">
              <Left>-27.185</Left>
              <Right>27.185</Right>
              <Bottom>-15.13</Bottom>
              <Top>15.13</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateOrthographicOffCenter">
                <gl:Left>-1</gl:Left>
                <gl:Right>1</gl:Right>
                <gl:Bottom>-1</gl:Bottom>
                <gl:Top>1</gl:Top>
                <gl:NearClip>-1000</gl:NearClip>
                <gl:FarClip>1000</gl:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BackgroundView</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SyncState</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
                <Property Name="ColorA" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>27</LocationX>
              <LocationY>15</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>0</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Video</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>SubscribedVideo</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>36600</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>EndExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:Delay">
          <gl:DueTime>PT1S</gl:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>SessionTimer</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>EndExperimentRoutine</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:SelectMany">
                <Name>IR LEDs</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="harp:CreateMessage">
                      <harp:MessageType>Write</harp:MessageType>
                      <harp:Payload xsi:type="harp:CreateMessagePayload">
                        <harp:Address>61</harp:Address>
                        <harp:PayloadType>U8</harp:PayloadType>
                        <harp:Value>8</harp:Value>
                      </harp:Payload>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Delay">
                        <gl:DueTime>PT0.1S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="MulticastSubject">
                      <Name>LedBoardCommands</Name>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Logging</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>FilesWriter</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Path" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
                    <MemberName>Path</MemberName>
                    <Value>C:\Users\neurogears\Documents\git\MoitaLab</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>RootPath</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SessionName" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>Fly123</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>SessionName</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubscribedVideo</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Image</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GenerateName</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_camera.avi</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:VideoWriter">
                      <cv:FileName>C:\Users\Admin\Desktop\AllRight\ForReal\CS_WALL_CTRL-6days-20CTRL-FH0-.AVI</cv:FileName>
                      <cv:Suffix>Timestamp</cv:Suffix>
                      <cv:Buffered>true</cv:Buffered>
                      <cv:Overwrite>false</cv:Overwrite>
                      <cv:FourCC>FMP4</cv:FourCC>
                      <cv:FrameRate>60</cv:FrameRate>
                      <cv:FrameSize>
                        <cv:Width>0</cv:Width>
                        <cv:Height>0</cv:Height>
                      </cv:FrameSize>
                      <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>SubscribedVideo</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ChunkData</Selector>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>GenerateName</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>RootPath</Name>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>SessionName</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Format">
                          <Format>{0}/{1}_camera.csv</Format>
                          <Selector>Item1,Item2</Selector>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="2" Label="Source1" />
                        <Edge From="1" To="2" Label="Source2" />
                        <Edge From="2" To="3" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="FileName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>C:\Users\Admin\Desktop\AllRight\ForReal\CS_WALL_CTRL-6days-20CTRL-FH0-.csv</io:FileName>
                    <io:Append>false</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>Timestamp</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="12" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="18" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source2" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source3" />
                  <Edge From="17" To="18" Label="Source2" />
                  <Edge From="18" To="19" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>EndExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:TakeUntil" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimulusSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>RunTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ControlNoisyStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ControlNoisyStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxRadius" Selector="MaxRadius" />
                      <Property Name="MonitorDistance" Selector="MonitorDistance" />
                      <Property Name="InitialRadius" Selector="InitialRadius" />
                      <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                      <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT2S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>25</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MaxRadius</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Max" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>25</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Diameter" />
                      <Property Name="OnColorR" Selector="OnColor.R" />
                      <Property Name="OnColorG" Selector="OnColor.G" />
                      <Property Name="OnColorB" Selector="OnColor.B" />
                      <Property Name="OnColorA" Selector="OnColor.A" />
                      <Property Name="OffColorR" Selector="OffColor.R" />
                      <Property Name="OffColorG" Selector="OffColor.G" />
                      <Property Name="OffColorB" Selector="OffColor.B" />
                      <Property Name="OffColorA" Selector="OffColor.A" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawCircleWithNoise.bonsai">
                    <Diameter>25</Diameter>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <OnColorR>0.9</OnColorR>
                    <OnColorG>0.1</OnColorG>
                    <OnColorB>0.2</OnColorB>
                    <OnColorA>1</OnColorA>
                    <OffColorR>0.5</OffColorR>
                    <OffColorG>0.6</OffColorG>
                    <OffColorB>1</OffColorB>
                    <OffColorA>1</OffColorA>
                    <Contrast>1</Contrast>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="24" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="19" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="24" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source3" />
                  <Edge From="24" To="30" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="38" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="37" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source2" />
                  <Edge From="37" To="38" Label="Source2" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoomingImageStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LoomingImageStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxRadius" Selector="MaxRadius" />
                      <Property Name="MonitorDistance" Selector="MonitorDistance" />
                      <Property Name="InitialRadius" Selector="InitialRadius" />
                      <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                      <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT0S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>18</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" Selector="it" />
                      <Property Name="ExtentY" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TextureName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TextureName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <TextureName />
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="20" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="20" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source3" />
                  <Edge From="20" To="26" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="34" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="33" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoomingCircleStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LoomingCircleStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxRadius" Selector="MaxRadius" />
                      <Property Name="MonitorDistance" Selector="MonitorDistance" />
                      <Property Name="InitialRadius" Selector="InitialRadius" />
                      <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                      <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT2S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>25</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Diameter" />
                      <Property Name="ColorR" Selector="Color.R" />
                      <Property Name="ColorG" Selector="Color.G" />
                      <Property Name="ColorB" Selector="Color.B" />
                      <Property Name="ColorA" Selector="Color.A" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>25</Diameter>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ColorR>0.5</ColorR>
                    <ColorG>0.6</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="19" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="19" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source3" />
                  <Edge From="19" To="25" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="33" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="32" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source2" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>ThisTrial</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>OptogeneticsStimuli</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:Condition">
                <Name>IsNotNull</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>it == null</scr:Expression>
                    </Expression>
                    <Expression xsi:type="BitwiseNot" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="2" To="3" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:CreateObservable">
                <Name>OptoStimuli</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Take">
                        <rx:Count>1</rx:Count>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="rx:AsyncSubject">
                      <Name>TrialSettings</Name>
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Draw</Name>
                    </Expression>
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                      <Duration>PT0S</Duration>
                      <MaxRadius>25</MaxRadius>
                      <MonitorDistance>18</MonitorDistance>
                      <InitialRadius>0.5</InitialRadius>
                      <InitialVirtualDistance>12.5</InitialVirtualDistance>
                      <LinearApproachingVelocity>25</LinearApproachingVelocity>
                    </Expression>
                    <Expression xsi:type="rx:PublishSubject">
                      <Name>Animation</Name>
                    </Expression>
                    <Expression xsi:type="PropertyMapping">
                      <PropertyMappings>
                        <Property Name="Diameter" />
                      </PropertyMappings>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="Diameter" />
                      <Property Name="ColorR" />
                      <Property Name="ColorG" />
                      <Property Name="ColorB" />
                      <Property Name="ColorA" />
                    </Expression>
                    <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                      <Diameter>0.1</Diameter>
                      <LocationX>0</LocationX>
                      <LocationY>0</LocationY>
                      <Layer>0</Layer>
                      <ColorR>1</ColorR>
                      <ColorG>1</ColorG>
                      <ColorB>1</ColorB>
                      <ColorA>1</ColorA>
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="DueTime" DisplayName="TimeBeforeStimulus" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Timer">
                        <gl:DueTime>PT0S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:SubscribeWhen" />
                    </Expression>
                    <Expression xsi:type="SubscribeSubject">
                      <Name>Animation</Name>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Last" />
                    </Expression>
                    <Expression xsi:type="ExternalizedMapping">
                      <Property Name="DueTime" DisplayName="TimeAfterStimuli" />
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="gl:Delay">
                        <gl:DueTime>PT0S</gl:DueTime>
                      </Combinator>
                    </Expression>
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:TakeUntil" />
                    </Expression>
                    <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                    <Expression xsi:type="Combinator">
                      <Combinator xsi:type="rx:Last" />
                    </Expression>
                    <Expression xsi:type="Unit" />
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                    <Edge From="3" To="4" Label="Source1" />
                    <Edge From="4" To="9" Label="Source1" />
                    <Edge From="5" To="6" Label="Source1" />
                    <Edge From="6" To="7" Label="Source1" />
                    <Edge From="7" To="9" Label="Source2" />
                    <Edge From="8" To="9" Label="Source3" />
                    <Edge From="9" To="12" Label="Source1" />
                    <Edge From="10" To="11" Label="Source1" />
                    <Edge From="11" To="12" Label="Source2" />
                    <Edge From="12" To="17" Label="Source1" />
                    <Edge From="13" To="14" Label="Source1" />
                    <Edge From="14" To="16" Label="Source1" />
                    <Edge From="15" To="16" Label="Source2" />
                    <Edge From="16" To="17" Label="Source2" />
                    <Edge From="17" To="18" Label="Source1" />
                    <Edge From="18" To="19" Label="Source1" />
                    <Edge From="19" To="20" Label="Source1" />
                    <Edge From="20" To="21" Label="Source1" />
                  </Edges>
                </Workflow>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="19" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="19" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="19" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source4" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Visualizers</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Image</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SessionTimer</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Video</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ChunkData.LineStatusAll</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>