<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:p3="clr-namespace:AutomaticGenerators;assembly=Extensions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="LoomPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>Schemas\visualstim.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>StimulusSettings</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="OptoPath" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>Schemas\optostim.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>OptoSettings</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Camera</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>HarpDevice</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Maximized</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>240</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyView.bonsai">
              <Left>-27.185</Left>
              <Right>27.185</Right>
              <Bottom>-15.13</Bottom>
              <Top>15.13</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateOrthographicOffCenter">
                <gl:Left>-1</gl:Left>
                <gl:Right>1</gl:Right>
                <gl:Bottom>-1</gl:Bottom>
                <gl:Top>1</gl:Top>
                <gl:NearClip>-1000</gl:NearClip>
                <gl:FarClip>1000</gl:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BackgroundView</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SyncState</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
                <Property Name="ColorA" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <LocationX>27</LocationX>
              <LocationY>15</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>0</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="17" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Camera</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>StartExperiment</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>SubscribedVideo</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>EndExperiment</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>SessionTimer</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EndExperimentRoutine</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Logging</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StimulusSettings</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Trials</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>RunVisualTrial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ThisVisualTrial</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisVisualTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>ControlNoisyStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Exists?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>ControlNoisyStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxRadius" Selector="MaxRadius" />
                      <Property Name="MonitorDistance" Selector="MonitorDistance" />
                      <Property Name="InitialRadius" Selector="InitialRadius" />
                      <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                      <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT2S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>25</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MaxRadius</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Max" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Rescale">
                      <dsp:Min>0</dsp:Min>
                      <dsp:Max>25</dsp:Max>
                      <dsp:RangeMin>0</dsp:RangeMin>
                      <dsp:RangeMax>1</dsp:RangeMax>
                      <dsp:RescaleType>Linear</dsp:RescaleType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Contrast" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Diameter" />
                      <Property Name="OnColorR" Selector="OnColor.R" />
                      <Property Name="OnColorG" Selector="OnColor.G" />
                      <Property Name="OnColorB" Selector="OnColor.B" />
                      <Property Name="OnColorA" Selector="OnColor.A" />
                      <Property Name="OffColorR" Selector="OffColor.R" />
                      <Property Name="OffColorG" Selector="OffColor.G" />
                      <Property Name="OffColorB" Selector="OffColor.B" />
                      <Property Name="OffColorA" Selector="OffColor.A" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawCircleWithNoise.bonsai">
                    <Diameter>25</Diameter>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <OnColorR>0.9</OnColorR>
                    <OnColorG>0.1</OnColorG>
                    <OnColorB>0.2</OnColorB>
                    <OnColorA>1</OnColorA>
                    <OffColorR>0.5</OffColorR>
                    <OffColorG>0.6</OffColorG>
                    <OffColorB>1</OffColorB>
                    <OffColorA>1</OffColorA>
                    <Contrast>1</Contrast>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="24" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="19" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="24" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source3" />
                  <Edge From="24" To="30" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="30" Label="Source2" />
                  <Edge From="30" To="38" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="37" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source2" />
                  <Edge From="37" To="38" Label="Source2" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisVisualTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoomingImageStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LoomingImageStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxRadius" Selector="MaxRadius" />
                      <Property Name="MonitorDistance" Selector="MonitorDistance" />
                      <Property Name="InitialRadius" Selector="InitialRadius" />
                      <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                      <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                    <Duration>PT0S</Duration>
                    <MaxRadius>25</MaxRadius>
                    <MonitorDistance>18</MonitorDistance>
                    <InitialRadius>0.5</InitialRadius>
                    <InitialVirtualDistance>12.5</InitialVirtualDistance>
                    <LinearApproachingVelocity>25</LinearApproachingVelocity>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ExtentX" Selector="it" />
                      <Property Name="ExtentY" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TextureName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="TextureName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                    <TextureName />
                    <ExtentX>1</ExtentX>
                    <ExtentY>1</ExtentY>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <Angle>0</Angle>
                    <ScaleX>1</ScaleX>
                    <ScaleY>1</ScaleY>
                    <ShiftX>0</ShiftX>
                    <ShiftY>0</ShiftY>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="20" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="20" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source3" />
                  <Edge From="20" To="26" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="34" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="33" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisVisualTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>LoomingCircleStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>LoomingCircleStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="MaxRadius" Selector="MaxRadius" />
                      <Property Name="MonitorDistance" Selector="MonitorDistance" />
                      <Property Name="InitialRadius" Selector="InitialRadius" />
                      <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                      <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>AnimationSettings</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Duration</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GroupWorkflow">
                    <Name>LoomRangeAnimation</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="ExternalizedMapping">
                          <Property Name="Duration" />
                          <Property Name="MaxRadius" />
                          <Property Name="MonitorDistance" />
                          <Property Name="InitialRadius" />
                          <Property Name="InitialVirtualDistance" />
                          <Property Name="LinearApproachingVelocity" />
                        </Expression>
                        <Expression xsi:type="rx:Defer">
                          <Name>LoomRangeAnimation</Name>
                          <Workflow>
                            <Nodes>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="Value" DisplayName="Duration" />
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="TimeSpanProperty">
                                  <Value>PT0.5S</Value>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="rx:Take">
                                  <rx:Count>1</rx:Count>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="rx:AsyncSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="SubscribeSubject">
                                  <Name>Duration</Name>
                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="MemberSelector">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Multiply">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="PropertyMapping">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="SubscribeSubject">
                                  <Name>Duration</Name>
                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="MemberSelector">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Multiply">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="PropertyMapping">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="ExternalizedMapping">
                                <Property Name="MaxRadius" />
                                <Property Name="MonitorDistance" />
                                <Property Name="InitialRadius" />
                                <Property Name="InitialVirtualDistance" />
                                <Property Name="LinearApproachingVelocity" />
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TotalSeconds</Selector>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="Duration" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="SubscribeSubject">
                                <Name>Duration</Name>
                              </Expression>
                              <Expression xsi:type="MemberSelector">
                                <Selector>TotalSeconds</Selector>
                              </Expression>
                              <Expression xsi:type="Multiply">
                                <Operand xsi:type="DoubleProperty">
                                  <Value>-1</Value>
                                </Operand>
                              </Expression>
                              <Expression xsi:type="PropertyMapping">
                                <PropertyMappings>
                                  <Property Name="RangeBegin" />
                                </PropertyMappings>
                              </Expression>
                              <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                                <Duration>0.5</Duration>
                                <RangeBegin>-0.5</RangeBegin>
                                <RangeEnd>0</RangeEnd>
                              </Expression>
                              <Expression xsi:type="Combinator">
                                <Combinator xsi:type="p1:CalculateLoomRadius">
                                  <p1:MaxRadius>25</p1:MaxRadius>
                                  <p1:MonitorDistance>19</p1:MonitorDistance>
                                  <p1:InitialRadius>0.25</p1:InitialRadius>
                                  <p1:InitialVirtualDistance>12.5</p1:InitialVirtualDistance>
                                  <p1:LinearApproachingVelocity>25</p1:LinearApproachingVelocity>
                                </Combinator>
                              </Expression>
                              <Expression xsi:type="Disable">
                                <Builder xsi:type="Combinator">
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                                </Builder>
                              </Expression>
                              <Expression xsi:type="WorkflowOutput" />
                            </Nodes>
                            <Edges>
                              <Edge From="0" To="1" Label="Source1" />
                              <Edge From="1" To="2" Label="Source1" />
                              <Edge From="2" To="3" Label="Source1" />
                              <Edge From="4" To="5" Label="Source1" />
                              <Edge From="5" To="6" Label="Source1" />
                              <Edge From="6" To="7" Label="Source1" />
                              <Edge From="7" To="12" Label="Source1" />
                              <Edge From="8" To="9" Label="Source1" />
                              <Edge From="9" To="10" Label="Source1" />
                              <Edge From="10" To="11" Label="Source1" />
                              <Edge From="11" To="12" Label="Source2" />
                              <Edge From="12" To="14" Label="Source1" />
                              <Edge From="13" To="14" Label="Source2" />
                              <Edge From="13" To="23" Label="Source2" />
                              <Edge From="14" To="24" Label="Source1" />
                              <Edge From="15" To="16" Label="Source1" />
                              <Edge From="16" To="17" Label="Source1" />
                              <Edge From="17" To="22" Label="Source1" />
                              <Edge From="18" To="19" Label="Source1" />
                              <Edge From="19" To="20" Label="Source1" />
                              <Edge From="20" To="21" Label="Source1" />
                              <Edge From="21" To="22" Label="Source2" />
                              <Edge From="22" To="23" Label="Source1" />
                              <Edge From="23" To="24" Label="Source2" />
                              <Edge From="24" To="25" Label="Source1" />
                            </Edges>
                          </Workflow>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="io:CsvWriter">
                    <io:FileName>a.csv</io:FileName>
                    <io:Append>true</io:Append>
                    <io:Overwrite>false</io:Overwrite>
                    <io:Suffix>None</io:Suffix>
                    <io:IncludeHeader>false</io:IncludeHeader>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Add">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:BehaviorSubject">
                      <Name>posX</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="Combinator">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="rx:BehaviorSubject">
                      <Name>posY</Name>
                    </Builder>
                  </Expression>
                  <Expression xsi:type="Disable">
                    <Builder xsi:type="PropertyMapping">
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                    </Builder>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>3</Duration>
                    <RangeBegin>0</RangeBegin>
                    <RangeEnd>1</RangeEnd>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorA" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>25</Diameter>
                    <LocationX>0.113592669</LocationX>
                    <LocationY>0.0823120847</LocationY>
                    <Layer>0</Layer>
                    <ColorR>0</ColorR>
                    <ColorG>0</ColorG>
                    <ColorB>0</ColorB>
                    <ColorA>0.166666672</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT3S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT0S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="4" To="17" Label="Source1" />
                  <Edge From="5" To="36" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="23" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="18" To="25" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source2" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="36" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="25" To="30" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="29" To="36" Label="Source3" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="36" Label="Source4" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source5" />
                  <Edge From="36" To="42" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source1" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source2" />
                  <Edge From="42" To="50" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="49" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source1" />
                  <Edge From="48" To="49" Label="Source2" />
                  <Edge From="49" To="50" Label="Source2" />
                  <Edge From="50" To="51" Label="Source1" />
                  <Edge From="51" To="52" Label="Source1" />
                  <Edge From="52" To="53" Label="Source1" />
                  <Edge From="53" To="54" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ThisVisualTrial</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>MovingCircleStimuli</Selector>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>IsNotNull</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it == null</scr:Expression>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>MovingCircleStimuli</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Draw</Name>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" Selector="Duration" />
                      <Property Name="RangeBegin" Selector="StartPosition.X" />
                      <Property Name="RangeEnd" Selector="EndPosition.X" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>1</Duration>
                    <RangeBegin>-1</RangeBegin>
                    <RangeEnd>1</RangeEnd>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Duration" Selector="Duration" />
                      <Property Name="RangeBegin" Selector="StartPosition.Y" />
                      <Property Name="RangeEnd" Selector="EndPosition.Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                    <Duration>1</Duration>
                    <RangeBegin>-1</RangeBegin>
                    <RangeEnd>1</RangeEnd>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>new(Item1 as X, Item2 as Y)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="LocationX" Selector="it.X" />
                      <Property Name="LocationY" Selector="it.Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="ColorR" Selector="Color.R" />
                      <Property Name="ColorG" Selector="Color.G" />
                      <Property Name="ColorB" Selector="Color.B" />
                      <Property Name="ColorA" Selector="Color.A" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Diameter" Selector="Radius" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                    <Diameter>25</Diameter>
                    <LocationX>0</LocationX>
                    <LocationY>0</LocationY>
                    <Layer>0</Layer>
                    <ColorR>0.5</ColorR>
                    <ColorG>0.6</ColorG>
                    <ColorB>1</ColorB>
                    <ColorA>1</ColorA>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOnset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Timer">
                      <gl:DueTime>PT1.5S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Animation</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Last" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>StimulusSettings</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>DelayOffset</Selector>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Name />
                    <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="DueTime" Selector="it" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:Delay">
                      <gl:DueTime>PT1S</gl:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:TakeUntil" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:LastOrDefault" />
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                  <Expression xsi:type="Unit" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="20" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="12" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="20" Label="Source2" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="20" Label="Source3" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source4" />
                  <Edge From="20" To="26" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="34" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="33" Label="Source1" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="32" To="33" Label="Source2" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="19" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="19" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="19" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source4" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>OptoSettings</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MemberSelector">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:CreateObservable">
          <Name>RunOptoTrial</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
        <Duration>3</Duration>
        <RangeBegin>25</RangeBegin>
        <RangeEnd>0</RangeEnd>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="19" To="21" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="20" To="27" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>