<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:p3="clr-namespace:AutomaticGenerators;assembly=Extensions"
                 xmlns:p4="clr-namespace:Bonsai.Vision.Design;assembly=Bonsai.Vision.Design"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="z. Save Folder" />
        <Property Name="a. Experimenter" />
        <Property Name="b. Genotype" />
        <Property Name="c. Protocol" />
        <Property Name="d. Sex" />
        <Property Name="e. Age" />
        <Property Name="f. Setup" />
        <Property Name="Camera FPS" />
        <Property Name="CameraA index" />
        <Property Name="CameraB index" />
        <Property Name="Experiment Duration" />
        <Property Name="Optogenetic Stimulation YML file" />
        <Property Name="Visual Stimulation YML file" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>General Settings</Name>
        <Description />
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="Optogenetic Stimulation YML file" Description="This is the .yaml file for the optogenetic stimulation." Category="Experimental Design" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>Schemas\tutorial_empty.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>OptoStimuliSettings</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Path" DisplayName="Visual Stimulation YML file" Description="This is the .yaml file for the visual stimulation." Category="Experimental Design" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:LoadSettings">
                <p1:Path>Schemas\tutorial_visualstim.yml</p1:Path>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>VisualStimuliSettings</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="z. Save Folder" Description="Path of the Folder you want to save your data in." Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="io:GetDirectories,sys:String">
              <MemberName>Path</MemberName>
              <Value>C:\Users\User\BonFly\data</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RootPath</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="a. Experimenter" Description="Initials of the Experimenter" Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>MH</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="b. Genotype" Description="Fly line." Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>CS</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="c. Protocol" Description="Name of the protocol run." Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>20Looms</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="d. Sex" Description="Sex of the flies." Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>F</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="e. Age" Description="Age Interval" Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>2d</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="f. Setup" Description="Experimental Setup where Bonsai is running." Category="Filename Creation" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>FH5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}-{1}-{2}-{3}-{4}-{5}-</Format>
              <Selector>Item1,Item2,Item3,Item4,Item5,Item6</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Camera FPS" Description="Frame Rate of the resulting video. Should match that of the camera." Category="Cameras Properties" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>FileName</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Experiment Duration" Description="Duration of the experiment in seconds. The experiment will last for 10 more seconds." Category="Experimental Design" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>10</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ExpDuration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="CameraA index" Description="First Camera (CameraA) Index. Set this property to 0." Category="Cameras Properties" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Index" DisplayName="CameraB index" Description="First Camera (CameraB) Index. Set this property to 1." Category="Cameras Properties" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:PublishSubject">
                <Name>Cameras</Name>
              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="27" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="22" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="22" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="22" Label="Source3" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="22" Label="Source4" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="22" Label="Source5" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source6" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="27" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source3" />
            <Edge From="26" To="32" Label="Source2" />
            <Edge From="27" To="28" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="35" To="36" Label="Source1" />
            <Edge From="36" To="39" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source2" />
            <Edge From="39" To="40" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Refresh Rate" />
        <Property Name="Display Number" />
        <Property Name="Monitor Width" />
        <Property Name="Monitor Height" />
        <Property Name="Square X Position" />
        <Property Name="Square Y Position" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Screen</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="TargetRenderFrequency" DisplayName="Refresh Rate" Description="Refresh rate in Hz. This should be set to 240." Category="Monitor Properties" />
              <Property Name="DisplayDevice" DisplayName="Display Number" Description="Select the stimulus screen order." Category="Monitor Properties" />
              <Property Name="Width" DisplayName="Monitor Width" Description="Width in pixels. Set this to 1920." Category="Monitor Properties" />
              <Property Name="Height" DisplayName="Monitor Height" Description="Height in pixels. Set this to 1080." Category="Monitor Properties" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>1920</gl:Width>
                <gl:Height>1080</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>true</gl:SwapSync>
                <gl:ClearColor>White</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>false</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Hidden</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>240</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\BonFlyView.bonsai">
              <Left>-27.185</Left>
              <Right>27.185</Right>
              <Bottom>-15.13</Bottom>
              <Top>15.13</Top>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateOrthographicOffCenter">
                <gl:Left>-1</gl:Left>
                <gl:Right>1</gl:Right>
                <gl:Bottom>-1</gl:Bottom>
                <gl:Top>1</gl:Top>
                <gl:NearClip>-1000</gl:NearClip>
                <gl:FarClip>1000</gl:FarClip>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BackgroundView</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>SyncState</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>SyncState</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it ? 1 : 0</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="ColorR" />
                <Property Name="ColorG" />
                <Property Name="ColorB" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Square Y Position" Description="Position of the photodiode indicator along the Height of the monitor. 1: Up, -1: Bottom" Category="Photodiode Properties" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it*13.9</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationY" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Square X Position" Description="Position of the photodiode indicator along the Width of the monitor. 1: Right, -1: Left" Category="Photodiode Properties" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it*26</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LocationX" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawQuad.bonsai">
              <ExtentX>3</ExtentX>
              <ExtentY>3</ExtentY>
              <LocationX>-26</LocationX>
              <LocationY>13.9</LocationY>
              <Layer>0</Layer>
              <Angle>0</Angle>
              <ColorR>0</ColorR>
              <ColorG>0</ColorG>
              <ColorB>0</ColorB>
              <ColorA>1</ColorA>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="26" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="26" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="26" Label="Source3" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source4" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="ExternalizedMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>HarpDevice</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>EndExperimentRoutine</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>FilesWriter</Name>
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        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Stimuli</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>VisualStimuliSettings</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Trials</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Name>RunVisualTrial</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisVisualTrial</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisVisualTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>ControlNoisyStimuli</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>Exists?</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it == null</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>ControlNoisyStimuli</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MaxRadius" Selector="MaxRadius" />
                            <Property Name="MonitorDistance" Selector="MonitorDistance" />
                            <Property Name="InitialRadius" Selector="InitialRadius" />
                            <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                            <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Duration</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Duration" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                          <Duration>PT2S</Duration>
                          <MaxRadius>25</MaxRadius>
                          <MonitorDistance>25</MonitorDistance>
                          <InitialRadius>0.5</InitialRadius>
                          <InitialVirtualDistance>12.5</InitialVirtualDistance>
                          <LinearApproachingVelocity>25</LinearApproachingVelocity>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>MaxRadius</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Max" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="dsp:Rescale">
                            <dsp:Min>0</dsp:Min>
                            <dsp:Max>25</dsp:Max>
                            <dsp:RangeMin>0</dsp:RangeMin>
                            <dsp:RangeMax>1</dsp:RangeMax>
                            <dsp:RescaleType>Linear</dsp:RescaleType>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Contrast" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Diameter" Selector="Diameter" />
                            <Property Name="OnColorR" Selector="OnColor.R" />
                            <Property Name="OnColorG" Selector="OnColor.G" />
                            <Property Name="OnColorB" Selector="OnColor.B" />
                            <Property Name="OnColorA" Selector="OnColor.A" />
                            <Property Name="OffColorR" Selector="OffColor.R" />
                            <Property Name="OffColorG" Selector="OffColor.G" />
                            <Property Name="OffColorB" Selector="OffColor.B" />
                            <Property Name="OffColorA" Selector="OffColor.A" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawCircleWithNoise.bonsai">
                          <Diameter>25</Diameter>
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <OnColorR>0.9</OnColorR>
                          <OnColorG>0.1</OnColorG>
                          <OnColorB>0.2</OnColorB>
                          <OnColorA>1</OnColorA>
                          <OffColorR>0.5</OffColorR>
                          <OffColorG>0.6</OffColorG>
                          <OffColorB>1</OffColorB>
                          <OffColorA>1</OffColorA>
                          <Contrast>1</Contrast>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOnset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT1.5S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOffset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Delay">
                            <gl:DueTime>PT1S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="24" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="14" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="19" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source2" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="24" Label="Source2" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source3" />
                        <Edge From="24" To="30" Label="Source1" />
                        <Edge From="25" To="26" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source2" />
                        <Edge From="30" To="38" Label="Source1" />
                        <Edge From="31" To="32" Label="Source1" />
                        <Edge From="32" To="37" Label="Source1" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source2" />
                        <Edge From="37" To="38" Label="Source2" />
                        <Edge From="38" To="39" Label="Source1" />
                        <Edge From="39" To="40" Label="Source1" />
                        <Edge From="40" To="41" Label="Source1" />
                        <Edge From="41" To="42" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisVisualTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LoomingImageStimuli</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsNotNull</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it == null</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LoomingImageStimuli</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MaxRadius" Selector="MaxRadius" />
                            <Property Name="MonitorDistance" Selector="MonitorDistance" />
                            <Property Name="InitialRadius" Selector="InitialRadius" />
                            <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                            <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Duration</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Duration" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                          <Duration>PT0S</Duration>
                          <MaxRadius>25</MaxRadius>
                          <MonitorDistance>18</MonitorDistance>
                          <InitialRadius>0.5</InitialRadius>
                          <InitialVirtualDistance>12.5</InitialVirtualDistance>
                          <LinearApproachingVelocity>25</LinearApproachingVelocity>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ExtentX" Selector="it" />
                            <Property Name="ExtentY" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>TextureName</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="TextureName" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
                          <TextureName />
                          <ExtentX>1</ExtentX>
                          <ExtentY>1</ExtentY>
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <Angle>0</Angle>
                          <ScaleX>1</ScaleX>
                          <ScaleY>1</ScaleY>
                          <ShiftX>0</ShiftX>
                          <ShiftY>0</ShiftY>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOnset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT0S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOffset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Delay">
                            <gl:DueTime>PT0S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="20" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="14" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="20" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source3" />
                        <Edge From="20" To="26" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source2" />
                        <Edge From="26" To="34" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="33" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source1" />
                        <Edge From="32" To="33" Label="Source2" />
                        <Edge From="33" To="34" Label="Source2" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                        <Edge From="37" To="38" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisVisualTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>MovingCircleStimuli</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsNotNull</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it == null</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>MovingCircleStimuli</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Duration" Selector="Duration" />
                            <Property Name="RangeBegin" Selector="StartPosition.X" />
                            <Property Name="RangeEnd" Selector="EndPosition.X" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                          <Duration>1</Duration>
                          <RangeBegin>-1</RangeBegin>
                          <RangeEnd>1</RangeEnd>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Duration" Selector="Duration" />
                            <Property Name="RangeBegin" Selector="StartPosition.Y" />
                            <Property Name="RangeEnd" Selector="EndPosition.Y" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.RangeAnimation.bonsai">
                          <Duration>1</Duration>
                          <RangeBegin>-1</RangeBegin>
                          <RangeEnd>1</RangeEnd>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:CombineLatest" />
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>new(Item1 as X, Item2 as Y)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="LocationX" Selector="it.X" />
                            <Property Name="LocationY" Selector="it.Y" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ColorR" Selector="Color.R" />
                            <Property Name="ColorG" Selector="Color.G" />
                            <Property Name="ColorB" Selector="Color.B" />
                            <Property Name="ColorA" Selector="Color.A" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Diameter" Selector="Radius" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <Diameter>25</Diameter>
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <ColorR>0.5</ColorR>
                          <ColorG>0.6</ColorG>
                          <ColorB>1</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOnset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT1.5S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOffset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Delay">
                            <gl:DueTime>PT1S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="20" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="12" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source2" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="20" Label="Source2" />
                        <Edge From="16" To="17" Label="Source1" />
                        <Edge From="17" To="20" Label="Source3" />
                        <Edge From="18" To="19" Label="Source1" />
                        <Edge From="19" To="20" Label="Source4" />
                        <Edge From="20" To="26" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source1" />
                        <Edge From="25" To="26" Label="Source2" />
                        <Edge From="26" To="34" Label="Source1" />
                        <Edge From="27" To="28" Label="Source1" />
                        <Edge From="28" To="33" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source1" />
                        <Edge From="32" To="33" Label="Source2" />
                        <Edge From="33" To="34" Label="Source2" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                        <Edge From="37" To="38" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisVisualTrial</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>LoomingCircleStimuli</Selector>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Name>IsNotNull</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it == null</scr:Expression>
                        </Expression>
                        <Expression xsi:type="BitwiseNot" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="3" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>LoomingCircleStimuli</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\DrawBackground.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Draw</Name>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOn.bonsai" />
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="MaxRadius" Selector="MaxRadius" />
                            <Property Name="MonitorDistance" Selector="MonitorDistance" />
                            <Property Name="InitialRadius" Selector="InitialRadius" />
                            <Property Name="InitialVirtualDistance" Selector="InitialVirtualDistance" />
                            <Property Name="LinearApproachingVelocity" Selector="LinearApproachingVelocity" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>AnimationSettings</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Duration</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Duration" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\LoomRangeAnimation.bonsai">
                          <Duration>PT0.5S</Duration>
                          <MaxRadius>25</MaxRadius>
                          <MonitorDistance>19</MonitorDistance>
                          <InitialRadius>0.5</InitialRadius>
                          <InitialVirtualDistance>12.5</InitialVirtualDistance>
                          <LinearApproachingVelocity>25</LinearApproachingVelocity>
                        </Expression>
                        <Expression xsi:type="rx:PublishSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="Diameter" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="ColorR" Selector="Color.R" />
                            <Property Name="ColorG" Selector="Color.G" />
                            <Property Name="ColorB" Selector="Color.B" />
                            <Property Name="ColorA" Selector="Color.A" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawCircle.bonsai">
                          <Diameter>25</Diameter>
                          <LocationX>0</LocationX>
                          <LocationY>0</LocationY>
                          <Layer>0</Layer>
                          <ColorR>0</ColorR>
                          <ColorG>0</ColorG>
                          <ColorB>0</ColorB>
                          <ColorA>1</ColorA>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOnset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Timer">
                            <gl:DueTime>PT10S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:SubscribeWhen" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>Animation</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Last" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>StimulusSettings</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>DelayOffset</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Name />
                          <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="DueTime" Selector="it" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:Delay">
                            <gl:DueTime>PT0S</gl:DueTime>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:TakeUntil" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:LastOrDefault" />
                        </Expression>
                        <Expression xsi:type="IncludeWorkflow" Path="Extensions\TurnSyncOff.bonsai" />
                        <Expression xsi:type="Unit" />
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="19" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="14" Label="Source1" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source2" />
                        <Edge From="14" To="15" Label="Source1" />
                        <Edge From="15" To="16" Label="Source1" />
                        <Edge From="16" To="19" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="19" Label="Source3" />
                        <Edge From="19" To="25" Label="Source1" />
                        <Edge From="20" To="21" Label="Source1" />
                        <Edge From="21" To="22" Label="Source1" />
                        <Edge From="22" To="23" Label="Source1" />
                        <Edge From="23" To="24" Label="Source1" />
                        <Edge From="24" To="25" Label="Source2" />
                        <Edge From="25" To="33" Label="Source1" />
                        <Edge From="26" To="27" Label="Source1" />
                        <Edge From="27" To="32" Label="Source1" />
                        <Edge From="28" To="29" Label="Source1" />
                        <Edge From="29" To="30" Label="Source1" />
                        <Edge From="30" To="31" Label="Source1" />
                        <Edge From="31" To="32" Label="Source2" />
                        <Edge From="32" To="33" Label="Source2" />
                        <Edge From="33" To="34" Label="Source1" />
                        <Edge From="34" To="35" Label="Source1" />
                        <Edge From="35" To="36" Label="Source1" />
                        <Edge From="36" To="37" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="19" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="19" Label="Source2" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="19" Label="Source3" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source4" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>OptoStimuliSettings</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="rx:CreateObservable">
                <Name>RunOptoTrial</Name>
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              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
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              </Builder>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="1" To="8" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>SessionTimer</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedRealTime</Selector>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="rx:PublishSubject">
              <Name>SessionTimer</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>Space</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Cameras</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>StartExperiment</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>SubscribedVideo</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>ExpDuration</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>EndExperiment</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>EndExperiment</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
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        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Online Camera Status</Name>
          <Description>Check GPIO and Camera Image</Description>
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        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="13" To="28" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="19" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="27" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>